opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: HAMDOUNLAB_HCR_OTFLEX_V16_MAC
author: SIO/Yoon Lee and Chloe Jenniches
description: This protocol is designed to perform end-to-end fully automated in situ hybridizations for 48 samples (wells) each containing probes for four targets. The biological sample type is the embryo of sea urchin Lytechinus pictus. The estimated duration of this protocol is 28 hours. This means that if the protocol is started in the morning (08:00-12:00), samples should be ready to image in the afternoon (12:00-16:00) of the following day.
robot: {model: OT-3 Standard, deckId: ot3_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_multi_flex: {mount: left}
  p1000_multi_flex: {mount: right}
moduleLocationUpdate:
  temperatureModuleV2: {location: C1}
  heaterShakerModuleV1: {location: D1}
  thermocyclerModuleV2: {location: B1}
labwareLocationUpdate:
  Opentrons Universal Flat Heater-Shaker Adapter: {loadName: opentrons_universal_flat_adapter, namespace: opentrons, version: 1, location: heaterShakerModuleV1}
  Opentrons 96 Well Aluminum Block: {loadName: opentrons_96_well_aluminum_block, namespace: opentrons, version: 1, location: temperatureModuleV2}
  Opentrons Flex 96 Filter Tip Rack 200 µL: {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: B2}
  Opentrons Flex 96 Filter Tip Rack 200 µL (1): {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: C2}
  Opentrons Flex 96 Filter Tip Rack 200 µL (2): {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: A3}
  Opentrons Flex 96 Filter Tip Rack 200 µL (3): {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: B3}
  Opentrons Flex 96 Filter Tip Rack 200 µL (4): {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: C3}
  LIQUID WASTE: {loadName: nest_96_wellplate_2ml_deep, namespace: opentrons, version: 2, location: D2}
  REAGENTS: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: A2}
  IMAGING PLATE (NO LID): {loadName: corning_96_wellplate_360ul_flat, namespace: opentrons, version: 2, location: Opentrons Universal Flat Heater-Shaker Adapter}
  HAIRPIN PLATE: {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: Opentrons 96 Well Aluminum Block}
  SAMPLES: {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: thermocyclerModuleV2}
pipetteTiprackAssignments:
  p50_multi_flex: [opentrons/opentrons_flex_96_filtertiprack_50ul/1]
  p1000_multi_flex: [opentrons/opentrons_flex_96_filtertiprack_200ul/1]
ingredients:
  - PROBE WASH BUFFER
  - 5X_SSCT
  - EMBRYOS
  - PROBE POOLS (20nM)
  - 1X AMPLIFICATION BUFFER
  - HAIRPIN MIX
  - HOECHST 33342 (160 nM or 1 ug/mL in 5X SSCT)
ingredLocations:
  REAGENTS:
    EMBRYOS {volume: 1000}: A1
    PROBE WASH BUFFER {volume: 9000}: A2-A4
    5X_SSCT {volume: 10000}: A5-A7, A9, A10
    1X AMPLIFICATION BUFFER {volume: 4000}: A8
    HOECHST 33342 (160 nM or 1 ug/mL in 5X SSCT) {volume: 10000}: A11
    5X_SSCT {volume: 14000}: A12
  HAIRPIN PLATE:
    HAIRPIN MIX {volume: 25}: A1-H1
  SAMPLES:
    PROBE POOLS (20nM) {volume: 5}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  latchOpen: true
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilResume
  pauseMessage: MODULES ARE READY. LOAD ALL PROTOCOL COMPONENTS. 
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  latchOpen: false
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: REAGENTS
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1.5
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dispense_mmFromBottom: 2
  dispense_touchTip_checkbox: true
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseHour: 12
  pauseMessage: 12H HYBRIDIZATION IN PROGRESS
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A2
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A7-A12
  dispense_flowRate: 100
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Warming 150uL of probe wash buffer at 37C for 5 minutes
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A7-A12
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  aspirate_touchTip_checkbox: true
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A3
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A7-A12
  dispense_flowRate: 100
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #1 for 37 C probe wash buffer for 30 minutes.
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A7-A12
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  aspirate_touchTip_checkbox: true
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A4
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A7-A12
  dispense_flowRate: 100
  dispense_mmFromBottom: 20
  dispense_touchTip_checkbox: true
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #2 for 37C probe wash buffer
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A7-A12
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  aspirate_touchTip_checkbox: true
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #3 for 37 C probe wash buffer
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 37
  lidIsActive: true
  lidTargetTemp: 40
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A5
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  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #1 for 21 C 5X SSCT
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A6
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #2 for 21 C 5X SSCT
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A7
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: mix
  stepName: mix
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 150
  times: 10
  changeTip: once
  labware: REAGENTS
  wells: A8
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  mix_mmFromBottom: 1
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Incubation #3 for 21 C 5X SSCT
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A1-A6
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: REAGENTS
  aspirate_wells: A8
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 1.5
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 40
  dispense_mmFromBottom: 1.5
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseHour: 1
  pauseMessage: 1 hour preamplification step in progress. 
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 21
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 70
  path: single
  changeTip: always
  aspirate_labware: REAGENTS
  aspirate_wells: A8
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 1.5
  dispense_labware: HAIRPIN PLATE
  dispense_wells: A1
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 80
  dispense_mmFromBottom: 2
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 35
  path: single
  changeTip: always
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: HAIRPIN PLATE
  dispense_wells: A7-A12
  dispense_flowRate: 10
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 12
  path: single
  changeTip: always
  aspirate_labware: HAIRPIN PLATE
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1.5
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: wasteChute
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: true
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: false
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseHour: 12
  pauseMessage: 12H AMPLIFICATION IN PROGRESS.
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 21
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A9
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Post-amplification 5X SSCT wash #1: Incubating for 30 minutes.
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A7-A12
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A10
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Post- amplification 5X SSCT wash #2: Incubating for 30 minutes
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A7-A12
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A11
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: Post- amplification 5X SSCT wash #3 (with Hoechst): Incubating for 30 minutes.
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 135
  path: single
  changeTip: once
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 3
  dispense_labware: LIQUID WASTE
  dispense_wells: A7-A12
  dispense_flowRate: 50
  dispense_mmFromBottom: 30
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 125
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A12
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2
  dispense_labware: SAMPLES
  dispense_wells: A1-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 20
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 125
  path: single
  changeTip: always
  aspirate_labware: SAMPLES
  aspirate_wells: A1-A6
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  aspirate_flowRate: 200
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: IMAGING PLATE (NO LID)
  dispense_wells: A1-A6
  dispense_flowRate: 100
  dispense_mmFromBottom: 8
  dispense_touchTip_checkbox: true
  dropTip_location: wasteChute
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 125
  path: single
  changeTip: once
  aspirate_labware: REAGENTS
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1.5
  dispense_labware: IMAGING PLATE (NO LID)
  dispense_wells: A1-A6
  dispense_flowRate: 300
  dispense_mmFromBottom: 8
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  moduleId: heaterShakerModuleV1
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: Waiting 10 minutes for embryos to settle to the bottom of the imaging plate. 
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  targetSpeed: 500
  setShake: true
  latchOpen: false
  heaterShakerSetTimer: true
  heaterShakerTimerMinutes: 5
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  latchOpen: true
labwareDefinitions:
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 12}
- thermocycler/openLid: {moduleId: thermocyclerModuleV2}
- thermocycler/setTargetBlockTemperature: {moduleId: thermocyclerModuleV2, celsius: 37}
- thermocycler/waitForBlockTemperature: {moduleId: thermocyclerModuleV2}
- thermocycler/setTargetLidTemperature: {moduleId: thermocyclerModuleV2, celsius: 40}
- thermocycler/waitForLidTemperature: {moduleId: thermocyclerModuleV2}
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